PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Data filename = 'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'participant': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['spreadsheets/balloons.xlsx', 'spreadsheets/trialTypes.xlsx', 'assets/bang.wav', 'assets/blueBalloon.png', 'assets/greenBalloon.png', 'assets/redBalloon.png', 'assets/bang.mp3']
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  color = $[-1.0000, 0.6157, 0.6392]
  expName = bart
  keyboardBackend = ioHub
  logging level = warning
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Routines
  Routine trial
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    ImageComponent background_2
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent bankButton
      allowedKeys = 'return', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent updateEarnings
      Code Type = Auto->JS
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      Begin Experiment:
        bankedEarnings=0.0
        balloonEarnings = ''
        bankedText = ''
        lastBalloonEarnings=0.0
        thisBalloonEarnings=0.0
      Begin Routine:
        thisBalloonEarnings=(pump.thisN+1)*0.05
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))
      End Routine:
        #calculate cash 'earned'
        if pump.thisN+1 == maxPumps:
            popped = True
        else:
            popped = False

        # if balloon popped reset the earnings
        if popped:
          thisBalloonEarnings=0.0
          lastBalloonEarnings=0.0
        else:
            lastBalloonEarnings=thisBalloonEarnings

        if 'return' in bankButton.keys:
            pump.finished = True
    TextboxComponent reminder
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
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      text:
        空格键或下方“继续”：继续充气
        回车键或下方“确认”：保存本轮收益
    TextboxComponent balloonValTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $balloonEarnings
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    TextboxComponent bankedTxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every frame] = $bankedText
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    CodeComponent setBalloonSize
      Code Type = Auto->JS
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      Begin Experiment:
        balloonSize=0.08
        balloonMsgHeight=0.01
      Begin Routine:
        balloonBody.setPos([0, balloonSize/2-.5])
        balloonBody.setSize(balloonSize)
      Each Frame:
        balloonSize=0.1+(pump.thisN+1)*0.015
      End Routine:
        #save data
        trials.addData('nPumps', pump.thisN+1)
        trials.addData('size', balloonSize)
        trials.addData('earnings', thisBalloonEarnings)
        trials.addData('popped', popped)
    ImageComponent balloonBody
      image = assets/redBalloon.png
      ori = -90
      pos [set every frame] = [0, balloonSize/2-.5]
      size [set every frame] = balloonSize
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent trialcount
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine finalScore
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    ImageComponent background_4
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    CodeComponent finalScoreCode
      Code Type = JS
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      Begin JS Routine:
        scoreText="Well done! You banked a total of\n£" + bankedEarnings.toFixed(2);
    TextboxComponent scoremsg
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $scoreText
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  Routine feedback
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    ImageComponent background_3
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    CodeComponent checkPopped
      Code Type = Auto->JS
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      Begin Experiment:
        feedbackText=""
      Begin Routine:
        # track the banked earnings
        bankedEarnings = bankedEarnings+lastBalloonEarnings

        #update the text
        balloonEarnings = "This balloon value:\n£" + str(round(thisBalloonEarnings, 2))
        bankedText = "You have banked:\n£" + str(round(bankedEarnings, 2))

        pop_sound.setVolume(1)

        # play the pop sound
        if popped==True:
          feedbackText="Oops! Lost that one!"
          pop_sound.play()
        else:
          feedbackText="You banked £" + str(round(lastBalloonEarnings, 2))
    TextboxComponent feedbacktxt
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $feedbackText
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    TextboxComponent bankedTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $bankedText
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    TextboxComponent balloonValTxt_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, 0.4)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every frame] = $balloonEarnings
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    TextboxComponent reminder_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (-0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        空格键或下方“继续”：继续充气
        回车键或下方“确认”：保存本轮收益
    TextboxComponent trialcount_2
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.03
      opacity = 0.8
      pos = (0.4, -0.3)
      size = (0.5, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $'Ballon number: ' + str(trials.thisN+1) +'/' + str(trials.nTotal)
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  Routine instructions
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    ImageComponent background
      image = assets/background.png
      size = (2.2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextboxComponent instrtxt
      bold = False
      borderColor = black
      color = black
      editable = False
      fillColor = white
      letterHeight = 0.04
      opacity = 0.8
      size = (1, 0.7)
      startVal [time (s)] = 0.0
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      text:
        这是一项气球模拟风险任务。

        每次继续操作，气球都会变大，同时本轮收益增加。但气球可能在某一次充气时爆炸；如果爆炸，本轮收益将归零。

        不同气球的爆炸点并不相同。请在继续充气以争取更多收益和及时保存本轮收益之间作出选择。

        空格键或下方“继续”：继续充气
        回车键或下方“确认”：保存本轮收益并进入下一个气球
    SoundComponent pop_sound
      sound = assets/bang.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      volume = 0
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  Routine reset_balloon
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        balloonSize=0.08
        popped=False
        nPumps=0
Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = spreadsheets/conditions.xlsx
    loopType = random
    nReps = 1
    random seed = 1832
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    conditions:
      [{'maxPumps': 2},
      {'maxPumps': 8},
      {'maxPumps': 14},
      {'maxPumps': 20},
      {'maxPumps': 26},
      {'maxPumps': 32},
      {'maxPumps': 38},
      {'maxPumps': 44},
      {'maxPumps': 50},
      {'maxPumps': 56},
      {'maxPumps': 62},
      {'maxPumps': 68},
      {'maxPumps': 74},
      {'maxPumps': 80},
      {'maxPumps': 86},
      {'maxPumps': 92},
      {'maxPumps': 98},
      {'maxPumps': 104},
      {'maxPumps': 110},
      {'maxPumps': 116}]
    Routine reset_balloon
    LoopInitiator pump loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = maxPumps
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      Routine trial
    LoopTerminator pump
    Routine feedback
  LoopTerminator trials
  Routine finalScore
