PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = change_detection
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent square1
      fillColor [set every repeat] = $color1
      lineColor [set every repeat] = $color1
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent square2
      fillColor [set every repeat] = $color2
      lineColor [set every repeat] = $color2
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent square3
      fillColor [set every repeat] = $color3
      lineColor [set every repeat] = $color3
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent square4
      fillColor [set every repeat] = $color4
      lineColor [set every repeat] = $color4
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent square5
      fillColor [set every repeat] = $color5
      lineColor [set every repeat] = $color5
      pos [set every repeat] = (x5, y5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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    PolygonComponent square6
      fillColor [set every repeat] = $color6
      lineColor [set every repeat] = $color6
      pos [set every repeat] = (x6, y6)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      units = height
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  Routine show_test
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        possible_sets = [[x1, y1, color1], [x2, y2, color2], [x3, y3, color3],
            [x4, y4, color4], [x5, y5, color5]]

        shuffle(possible_sets)

        # if the condition is the same set the test such that the color in this location is the same
        if condition_label == 'same':
            xtest = possible_sets[0][0]
            ytest = possible_sets[0][1]
            colortest = possible_sets[0][2]
        else:
            xtest = possible_sets[0][0]
            ytest = possible_sets[0][1]
            colortest = possible_sets[1][2]# else set the color to be different
        # save to the data file
        thisExp.addData('xtest', xtest)
        thisExp.addData('ytest', ytest)
        thisExp.addData('colortest', colortest)
    TextboxComponent question
      bold = False
      editable = False
      letterHeight = 0.055
      lineSpacing = 1.3
      pos = (0, -0.82)
      size = (1.8, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        这个颜色的方块刚才出现在这个位置吗？

        是：按 Y 或点击“Y / 是”　　否：按 N 或点击“N / 否”
    PolygonComponent test_square
      fillColor [set every repeat] = $colortest
      lineColor [set every repeat] = $colortest
      pos [set every repeat] = (xtest, ytest)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      correctAns = $answer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine feedback
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp.corr:
            fbtxt = '正确！'
            fbcol = 'green'
        else:
            fbtxt = '错误'
            fbcol = 'red'
    TextboxComponent fbtextbox
      bold = False
      color [set every repeat] = $fbcol
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbtxt
      units = height
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  Routine instructions
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    TextboxComponent welcometxt
      bold = False
      editable = False
      letterHeight = 0.055
      lineSpacing = 1.5
      size = (1.8, 1.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        本任务包含两个阶段。

        第一阶段：屏幕先呈现六个彩色方块，随后在某一位置呈现一个彩色方块。请判断该颜色是否曾出现在同一位置。

        若出现过，请按 Y 或点击“Y / 是”；若没有出现，请按 N 或点击“N / 否”。

        按空格键或点击“继续”开始
    KeyboardComponent start_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine bye
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    TextboxComponent textbox
      bold = False
      editable = False
      letterHeight = 0.06
      lineSpacing = 1.5
      size = (1.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 实验结束，感谢参与！
      units = norm
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  Routine next_instr
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    TextboxComponent nextinstrtxt
      bold = False
      editable = False
      letterHeight = 0.055
      lineSpacing = 1.5
      size = (1.8, 1.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        很好！

        接下来，屏幕会先后呈现两组六个方块，其中一个方块的颜色发生了变化。请按 1–6 或点击对应数字，选择发生变化的方块编号。

        按空格键或点击“继续”开始
    KeyboardComponent next_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine localisation_test
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    PolygonComponent square1_2
      fillColor [set every repeat] = $testcolor1
      lineColor [set every repeat] = $testcolor1
      pos [set every repeat] = (x1, y1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent square2_2
      fillColor [set every repeat] = $testcolor2
      lineColor [set every repeat] = $testcolor2
      pos [set every repeat] = (x2, y2)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent square3_2
      fillColor [set every repeat] = $testcolor3
      lineColor [set every repeat] = $testcolor3
      pos [set every repeat] = (x3, y3)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent square4_2
      fillColor [set every repeat] = $testcolor4
      lineColor [set every repeat] = $testcolor4
      pos [set every repeat] = (x4, y4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent square5_2
      fillColor [set every repeat] = $testcolor5
      lineColor [set every repeat] = $testcolor5
      pos [set every repeat] = (x5, y5)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent square6_2
      fillColor [set every repeat] = $testcolor6
      lineColor [set every repeat] = $testcolor6
      pos [set every repeat] = (x6, y6)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      units = height
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    TextboxComponent one_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x1, y1)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 1
      units = height
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    TextboxComponent two_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x2, y2)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 2
      units = height
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    TextboxComponent three_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x3, y3)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 3
      units = height
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    TextboxComponent four_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x4, y4)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 4
      units = height
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    TextboxComponent five_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x5, y5)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 5
      units = height
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    TextboxComponent six_label
      bold = False
      color = black
      editable = False
      letterHeight = 0.05
      pos [set every repeat] = (x6, y6)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      text = 6
      units = height
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    KeyboardComponent localisation_resp
      allowedKeys = '1', '2', '3', '4', '5', '6'
      correctAns = $changed_color_index
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextboxComponent question_2
      bold = False
      editable = False
      letterHeight = 0.055
      lineSpacing = 1.3
      pos = (0, -0.82)
      size = (1.8, 0.3)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        哪个方块的颜色发生了变化？

        请按 1–6 或点击对应数字
  Routine localisation_feedback
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if localisation_resp.corr:
            fbtxt = '正确！'
            fbcol = 'green'
        else:
            fbtxt = '错误'
            fbcol = 'red'
    TextboxComponent fbtextbox_2
      bold = False
      color [set every repeat] = $fbcol
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fbtxt
      units = height
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  Routine fixation
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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  Routine retention
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    TextComponent blank
      letterHeight = 0.05
      pos = (0, -500)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = offscreen
      units = height
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Flow
  Routine instructions
  LoopInitiator change_trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = code/sampled_circle_points_with_colors.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('x1', -0.212132034), ('y1', -0.212132034), ('x2', 0.3), ('y2', 0.0), ('x3', -0.212132034), ('y3', 0.212132034), ('x4', -5.51e-17), ('y4', -0.3), ('x5', 0.212132034), ('y5', -0.212132034), ('x6', -0.3), ('y6', 3.67e-17), ('color1', 'yellow'), ('color2', 'green'), ('color3', 'orange'), ('color4', 'blue'), ('color5', 'red'), ('color6', 'magenta'), ('condition_label', 'same'), ('answer', 'y')]),
      OrderedDict([('x1', 0.212132034), ('y1', -0.212132034), ('x2', 0.3), ('y2', 0.0), ('x3', -0.212132034), ('y3', 0.212132034), ('x4', -0.212132034), ('y4', -0.212132034), ('x5', -5.51e-17), ('y5', -0.3), ('x6', 1.84e-17), ('y6', 0.3), ('color1', 'magenta'), ('color2', 'orange'), ('color3', 'pink'), ('color4', 'blue'), ('color5', 'green'), ('color6', 'red'), ('condition_label', 'same'), ('answer', 'y')]),
      OrderedDict([('x1', 1.84e-17), ('y1', 0.3), ('x2', 0.3), ('y2', 0.0), ('x3', -0.212132034), ('y3', -0.212132034), ('x4', -5.51e-17), ('y4', -0.3), ('x5', -0.3), ('y5', 3.67e-17), ('x6', -0.212132034), ('y6', 0.212132034), ('color1', 'brown'), ('color2', 'red'), ('color3', 'magenta'), ('color4', 'green'), ('color5', 'orange'), ('color6', 'purple'), ('condition_label', 'same'), ('answer', 'y')]),
      OrderedDict([('x1', -0.3), ('y1', 3.67e-17), ('x2', -0.212132034), ('y2', -0.212132034), ('x3', -0.212132034), ('y3', 0.212132034), ('x4', 0.212132034), ('y4', -0.212132034), ('x5', 1.84e-17), ('y5', 0.3), ('x6', 0.212132034), ('y6', 0.212132034), ('color1', 'yellow'), ('color2', 'cyan'), ('color3', 'pink'), ('color4', 'purple'), ('color5', 'magenta'), ('color6', 'red'), ('condition_label', 'same'), ('answer', 'y')])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
    Routine fixation
    Routine trial
    Routine retention
    Routine show_test
    Routine feedback
  LoopTerminator change_trials
  Routine next_instr
  LoopInitiator localisation_trials loopType="TrialHandler"
    Selected rows = 0:10
    conditionsFile = code/localisation_trials_with_test_columns.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'x1': -0.212132034, 'y1': -0.212132034, 'x2': 0.3, 'y2': 0, 'x3': -0.212132034, 'y3': 0.212132034, 'x4': -5.51e-17, 'y4': -0.3, 'x5': 0.212132034, 'y5': -0.212132034, 'x6': -0.3, 'y6': 3.67e-17, 'color1': 'yellow', 'color2': 'green', 'color3': 'orange', 'color4': 'blue', 'color5': 'red', 'color6': 'magenta', 'condition_label': 'same', 'answer': 'y', 'testcolor1': 'yellow', 'testcolor2': 'green', 'testcolor3': 'orange', 'testcolor4': 'pink', 'testcolor5': 'red', 'testcolor6': 'magenta', 'changed_color_index': 4},
      {'x1': 0.212132034, 'y1': -0.212132034, 'x2': 0.3, 'y2': 0, 'x3': -0.212132034, 'y3': 0.212132034, 'x4': -0.212132034, 'y4': -0.212132034, 'x5': -5.51e-17, 'y5': -0.3, 'x6': 1.84e-17, 'y6': 0.3, 'color1': 'magenta', 'color2': 'orange', 'color3': 'pink', 'color4': 'blue', 'color5': 'green', 'color6': 'red', 'condition_label': 'same', 'answer': 'y', 'testcolor1': 'magenta', 'testcolor2': 'orange', 'testcolor3': 'pink', 'testcolor4': 'blue', 'testcolor5': 'green', 'testcolor6': 'yellow', 'changed_color_index': 6},
      {'x1': 1.84e-17, 'y1': 0.3, 'x2': 0.3, 'y2': 0, 'x3': -0.212132034, 'y3': -0.212132034, 'x4': -5.51e-17, 'y4': -0.3, 'x5': -0.3, 'y5': 3.67e-17, 'x6': -0.212132034, 'y6': 0.212132034, 'color1': 'brown', 'color2': 'red', 'color3': 'magenta', 'color4': 'green', 'color5': 'orange', 'color6': 'purple', 'condition_label': 'same', 'answer': 'y', 'testcolor1': 'brown', 'testcolor2': 'red', 'testcolor3': 'yellow', 'testcolor4': 'green', 'testcolor5': 'orange', 'testcolor6': 'purple', 'changed_color_index': 3},
      {'x1': -0.3, 'y1': 3.67e-17, 'x2': -0.212132034, 'y2': -0.212132034, 'x3': -0.212132034, 'y3': 0.212132034, 'x4': 0.212132034, 'y4': -0.212132034, 'x5': 1.84e-17, 'y5': 0.3, 'x6': 0.212132034, 'y6': 0.212132034, 'color1': 'yellow', 'color2': 'cyan', 'color3': 'pink', 'color4': 'purple', 'color5': 'magenta', 'color6': 'red', 'condition_label': 'same', 'answer': 'y', 'testcolor1': 'yellow', 'testcolor2': 'cyan', 'testcolor3': 'pink', 'testcolor4': 'brown', 'testcolor5': 'magenta', 'testcolor6': 'red', 'changed_color_index': 4}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
    Routine fixation
    Routine trial
    Routine retention
    Routine localisation_test
    Routine localisation_feedback
  LoopTerminator localisation_trials
  Routine bye
